PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = distraction and problem solving
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        You will be shown some simple arithmetic problem, for example, 3+5-6. You have to report the answer in the text box provided.

        Round 1
  Routine trial
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    TextComponent problem
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $problems
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type here
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      text = Click to submit
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  Routine round_2
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    TextComponent instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Round 2
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  Routine distraction
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_problems
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    TextboxComponent textbox_3
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3,0.1)
      startVal [time (s)] = 0.0
      text = Click to submit
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    PolygonComponent notif_polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = opacity
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.8
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    SoundComponent notif_sound
      sound [set every repeat] = 500
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.8
      volume [set every repeat] = int(intensity)
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'problems': '5+7-4', 'answers': 8},
      {'problems': '10-6+2', 'answers': 6},
      {'problems': '1+3-9', 'answers': -5},
      {'problems': '4+8-2', 'answers': 10},
      {'problems': '6-3+2', 'answers': 5},
      {'problems': '8+1-3', 'answers': 6},
      {'problems': '5-7+1', 'answers': -1},
      {'problems': '4+9-1', 'answers': 12},
      {'problems': '2+3+6', 'answers': 11},
      {'problems': '7-4+2', 'answers': 5}]
    Routine trial
  LoopTerminator trials
  Routine round_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions file 2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_problems': '5+6-3', 'test_answers': 8, 'opacity': 0, 'intensity': 1},
      {'test_problems': '9-3+1', 'test_answers': 7, 'opacity': 1, 'intensity': 0},
      {'test_problems': '2+4-8', 'test_answers': -2, 'opacity': 1, 'intensity': 0},
      {'test_problems': '2+7-3', 'test_answers': 6, 'opacity': 0, 'intensity': 1},
      {'test_problems': '5-4+1', 'test_answers': 2, 'opacity': 1, 'intensity': 0},
      {'test_problems': '3+7-4', 'test_answers': 6, 'opacity': 0, 'intensity': 1},
      {'test_problems': '2-6+3', 'test_answers': -1, 'opacity': 0, 'intensity': 1},
      {'test_problems': '3+7-2', 'test_answers': 8, 'opacity': 1, 'intensity': 0},
      {'test_problems': '1-7+5', 'test_answers': -1, 'opacity': 0, 'intensity': 1},
      {'test_problems': '6-5+3', 'test_answers': 4, 'opacity': 1, 'intensity': 0}]
    Routine distraction
  LoopTerminator trials_2
